<?xdl version="0.4.2" ?>

<Synthesis>
  <Hardware>
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      id="concentrated HCl" />
    <Reagent
      id="ether" />
    <Reagent
      id="sodium peroxide" />
    <Reagent
      id="the nitrile" />
    <Reagent
      id="water" />
  </Reagents>

  <Procedure>
    <Add
      reagent="the nitrile"
      vessel="reactor"
      volume="0" />
    <HeatChillToTemp
      vessel="reactor"
      temp="50°C"
      stir="True" />
    <Add
      reagent="water"
      vessel="reactor"
      volume="0" />
    <StopHeatChill
      vessel="reactor" />
    <Add
      reagent="sodium peroxide"
      vessel="reactor"
      volume="0"
      dispense_speed="10" />
    <Separate
      purpose="extract"
      from_vessel="reactor"
      separation_vessel="separator"
      to_vessel="separator"
      product_bottom="False"
      solvent="ether"
      solvent_volume="25 mL"
      waste_phase_to_vessel="separator" />
    <Add
      reagent="concentrated HCl"
      vessel="separator"
      volume="0"
      dispense_speed="10"
      stir="True" />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="reactor"
      product_bottom="False"
      solvent="ether"
      solvent_volume="25 mL" />
    <Dry
      vessel="reactor" />
  </Procedure>

</Synthesis>
