<?xdl version="0.4.2" ?>

<Synthesis>
  <Hardware>
    <Component
      id="cartridge_magnesium sulphate"
      type="cartridge"
      chemical="magnesium sulphate" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      id="brine" />
    <Reagent
      id="cinnamaldehyde" />
    <Reagent
      id="ether" />
    <Reagent
      id="iodoform THF solution" />
    <Reagent
      id="potassium t-butoxide" />
    <Reagent
      id="triphenylphosphine" />
  </Reagents>

  <Procedure>
    <Add
      reagent="iodoform THF solution"
      vessel="reactor"
      volume="0" />
    <Add
      reagent="triphenylphosphine"
      vessel="reactor"
      volume="0" />
    <Add
      reagent="potassium t-butoxide"
      vessel="reactor"
      volume="0" />
    <Stir
      vessel="reactor"
      time="60 secs" />
    <Add
      reagent="cinnamaldehyde"
      vessel="reactor"
      volume="0" />
    <Stir
      vessel="reactor"
      time="15 mins" />
    <HeatChillToTemp
      vessel="reactor"
      temp="-78°C"
      stir="True" />
    <Add
      reagent="potassium t-butoxide"
      vessel="reactor"
      volume="0" />
    <Stir
      vessel="reactor"
      time="5 mins" />
    <Add
      reagent="brine"
      vessel="reactor"
      volume="0" />
    <Separate
      purpose="extract"
      from_vessel="reactor"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_bottom="False"
      solvent="ether"
      through="magnesium sulphate"
      solvent_volume="25 mL"
      n_separations="2" />
    <Evaporate
      rotavap_name="rotavap"
      time="30 mins"
      mode="auto" />
    <RunColumn
      from_vessel="rotavap"
      to_vessel="reactor"
      column="column" />
  </Procedure>

</Synthesis>
