<?xdl version="0.4.2" ?>

<Synthesis>
  <Hardware>
    <Component
      id="buffer_flask"
      type="buffer_flask" />
    <Component
      id="cartridge_anhydrous magnesium sulfate"
      type="cartridge"
      chemical="anhydrous magnesium sulfate" />
    <Component
      id="filter"
      type="filter" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      id="1,1-dichloro-2-ethoxycyclopropane" />
    <Reagent
      id="absolute ethanol" />
    <Reagent
      id="copper sulfate(CuSO4) water solution" />
    <Reagent
      id="dichloromethane" />
    <Reagent
      id="pyridine" />
    <Reagent
      id="the MgSO4" />
    <Reagent
      id="the dichloromethane solution" />
    <Reagent
      id="water" />
  </Reagents>

  <Procedure>
    <Add
      reagent="absolute ethanol"
      vessel="reactor"
      volume="50 mL" />
    <Add
      reagent="pyridine"
      vessel="reactor"
      volume="7.33 mL"
      stir="True" />
    <Add
      reagent="1,1-dichloro-2-ethoxycyclopropane"
      vessel="reactor"
      mass="10.86 g"
      stir="True" />
    <HeatChill
      vessel="reactor"
      temp="95°C"
      time="48 hrs"
      stir="True" />
    <HeatChillToTemp
      vessel="reactor"
      temp="25°C"
      active="False"
      continue_heatchill="False"
      stir="True" />
    <Transfer
      from_vessel="reactor"
      to_vessel="rotavap"
      volume="all" />
    <Evaporate
      rotavap_name="rotavap"
      temp="40°C"
      pressure="93.3254 mbar"
      time="30 mins"
      mode="auto" />
    <Transfer
      from_vessel="rotavap"
      to_vessel="separator"
      volume="all" />
    <Repeat
      repeats="2">
      <Add
        reagent="water"
        vessel="rotavap"
        volume="50 mL"
        stir="True" />
      <Transfer
        from_vessel="rotavap"
        to_vessel="separator"
        volume="all" />
    </Repeat>
    <Add
      reagent="dichloromethane"
      vessel="rotavap"
      volume="60 mL"
      stir="True" />
    <Transfer
      from_vessel="rotavap"
      to_vessel="separator"
      volume="all" />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="buffer_flask"
      product_bottom="True"
      solvent=""
      waste_phase_to_vessel="separator" />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="separator"
      product_bottom="True"
      solvent="dichloromethane"
      solvent_volume="50 mL"
      n_separations="2" />
    <Transfer
      from_vessel="buffer_flask"
      to_vessel="separator"
      volume="all" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="filter"
      product_bottom="True"
      solvent="copper sulfate(CuSO4) water solution"
      through="anhydrous magnesium sulfate"
      solvent_volume="100 mL"
      n_separations="2" />
    <Add
      reagent="dichloromethane"
      vessel="filter"
      volume="15 mL" />
    <Stir
      vessel="filter"
      time="60 secs" />
    <Filter
      filter_vessel="filter" />
    <Transfer
      from_vessel="filter"
      to_vessel="rotavap"
      volume="all" />
    <Evaporate
      rotavap_name="rotavap"
      pressure="93.3254 mbar"
      time="30 mins"
      mode="auto" />
    <Transfer
      from_vessel="rotavap"
      to_vessel="reactor"
      volume="all" />
    <Add
      reagent="dichloromethane"
      vessel="reactor"
      volume="2 mL" />
    <HeatChillToTemp
      vessel="reactor"
      temp="-78°C"
      stir="True" />
    <Distill />
  </Procedure>

</Synthesis>
