<?xdl version="0.4.2" ?>

<Synthesis>
  <Hardware>
    <Component
      id="filter"
      type="filter" />
  </Hardware>

  <Reagents>
    <Reagent
      id="anhydrous Et2O" />
    <Reagent
      id="benzyl carbamate" />
    <Reagent
      id="glyoxylic acid monohydrate" />
    <Reagent
      id="hexanes-Et2O" />
  </Reagents>

  <Procedure>
    <Add
      reagent="benzyl carbamate"
      vessel="filter"
      mass="30.23 g" />
    <Add
      reagent="glyoxylic acid monohydrate"
      vessel="filter"
      mass="20.25 g" />
    <Evacuate
      vessel="filter" />
    <Add
      reagent="anhydrous Et2O"
      vessel="filter"
      volume="200 mL" />
    <HeatChill
      vessel="filter"
      temp="34.5°C"
      time="12 hrs"
      stir="True"
      stir_speed="200 RPM" />
    <Filter
      filter_vessel="filter" />
    <WashSolid
      vessel="filter"
      solvent="hexanes-Et2O"
      volume="10 mL"
      repeat="6" />
    <Dry
      vessel="filter" />
  </Procedure>

</Synthesis>
