<?xdl version="0.4.2" ?>

<Synthesis>
  <Hardware>
    <Component
      id="cartridge_anhydrous MgSO4"
      type="cartridge"
      chemical="anhydrous MgSO4" />
    <Component
      id="cartridge_celite"
      type="cartridge"
      chemical="celite" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      id="DMSO" />
    <Reagent
      id="brine" />
    <Reagent
      id="cinnamaldehyde" />
    <Reagent
      id="compound 1" />
    <Reagent
      id="copper(I)iodide" />
    <Reagent
      id="diisopropylamine" />
    <Reagent
      id="ethyl acetate" />
    <Reagent
      id="water" />
  </Reagents>

  <Procedure>
    <Add
      reagent="compound 1"
      vessel="reactor"
      mass="6.19 g" />
    <Add
      reagent="copper(I)iodide"
      vessel="reactor"
      mass="1.33 g" />
    <Evacuate
      vessel="reactor" />
    <Add
      reagent="cinnamaldehyde"
      vessel="reactor"
      volume="6.6 mL"
      dispense_speed="10" />
    <Add
      reagent="diisopropylamine"
      vessel="reactor"
      volume="9.8 mL"
      dispense_speed="10"
      stir="True" />
    <Add
      reagent="DMSO"
      vessel="reactor"
      volume="175 mL"
      dispense_speed="10"
      stir="True" />
    <HeatChill
      vessel="reactor"
      temp="60°C"
      time="16 hrs"
      stir="True" />
    <Add
      reagent="ethyl acetate"
      vessel="reactor"
      volume="175 mL"
      stir="True" />
    <Add
      reagent="water"
      vessel="reactor"
      volume="100 mL"
      stir="True" />
    <FilterThrough
      from_vessel="reactor"
      to_vessel="separator"
      through="celite"
      eluting_solvent="ethyl acetate"
      eluting_volume="175 mL" />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="separator"
      product_bottom="False"
      solvent="" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="separator"
      product_bottom="False"
      solvent="water"
      solvent_volume="150 mL" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_bottom="False"
      solvent="brine"
      through="anhydrous MgSO4"
      solvent_volume="50 mL" />
    <FilterThrough
      from_vessel="rotavap"
      to_vessel="rotavap"
      through="celite" />
    <Evaporate
      rotavap_name="rotavap"
      temp="35°C"
      pressure="39.9966 mbar"
      time="30 mins"
      mode="auto" />
    <Distill />
    <RunColumn
      from_vessel="rotavap"
      to_vessel="rotavap"
      column="column" />
    <Evaporate
      rotavap_name="rotavap"
      temp="35°C"
      pressure="39.9966 mbar"
      time="30 mins"
      mode="auto" />
    <Dry
      vessel="rotavap"
      time="2 hrs"
      temp="25°C"
      vacuum_pressure="1.9998 mbar" />
  </Procedure>

</Synthesis>
