<?xdl version="0.4.4" ?>

<Synthesis>
  <Hardware>
    <Component
      id="column"
      type="column" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
  </Hardware>

  <Reagents>
    <Reagent
      id="DEAD" />
    <Reagent
      id="THF" />
    <Reagent
      id="the alcohol" />
    <Reagent
      id="the maleimide and triphenylphosphine THF solution" />
  </Reagents>

  <Procedure>
    <HeatChillToTemp
      vessel="reactor"
      temp="0.0"
      stir="True" />
    <Add
      reagent="the maleimide and triphenylphosphine THF solution"
      vessel="reactor"
      volume="0" />
    <Add
      reagent="the alcohol"
      vessel="reactor"
      volume="0"
      dispense_speed="3.0" />
    <Add
      reagent="THF"
      vessel="reactor"
      volume="10 mL"
      dispense_speed="3.0" />
    <Add
      reagent="DEAD"
      vessel="reactor"
      volume="0"
      dispense_speed="3.0"
      stir="True" />
    <HeatChillToTemp
      vessel="reactor"
      temp="18.0"
      active="False"
      continue_heatchill="False"
      stir="True" />
    <Stir
      vessel="reactor"
      time="2.5 hrs" />
    <Transfer
      from_vessel="reactor"
      to_vessel="rotavap"
      volume="all" />
    <Evaporate
      rotavap_name="rotavap"
      temp="50.0"
      pressure="249.0"
      time="30 mins"
      mode="auto" />
    <RunColumn
      from_vessel="rotavap"
      to_vessel="reactor"
      column="column" />
  </Procedure>

</Synthesis>
