<?xdl version="0.4.4" ?>

<Synthesis>
  <Hardware>
    <Component
      id="cartridge_Na2SO4"
      type="cartridge"
      chemical="Na2SO4" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      id="2-(3,4-Dimethoxyphenyl)ethylamine" />
    <Reagent
      id="CH2Cl2" />
    <Reagent
      id="EtOAc" />
    <Reagent
      id="NEt3" />
    <Reagent
      id="aqueous HCl" />
    <Reagent
      id="brine" />
    <Reagent
      id="pent-4-enoyl chloride 6" />
  </Reagents>

  <Procedure>
    <Add
      reagent="2-(3,4-Dimethoxyphenyl)ethylamine"
      vessel="reactor"
      volume="15.2 mL" />
    <Add
      reagent="CH2Cl2"
      vessel="reactor"
      volume="90 mL"
      stir="True" />
    <Dissolve
      vessel="reactor"
      solvent="NEt3"
      volume="18.9 mL" />
    <HeatChillToTemp
      vessel="reactor"
      temp="0.0"
      stir="True" />
    <Add
      reagent="pent-4-enoyl chloride 6"
      vessel="reactor"
      mass="10.68 g"
      dispense_speed="3.0"
      stir="True" />
    <Stir
      vessel="reactor"
      time="30 mins" />
    <HeatChillToTemp
      vessel="reactor"
      temp="18.0"
      active="False"
      continue_heatchill="False"
      stir="True" />
    <Stir
      vessel="reactor"
      time="20 hrs" />
    <Transfer
      from_vessel="reactor"
      to_vessel="rotavap"
      volume="all" />
    <Evaporate
      rotavap_name="rotavap"
      temp="50.0"
      pressure="699.0"
      time="30 mins"
      mode="auto" />
    <Dissolve
      vessel="rotavap"
      solvent="EtOAc"
      volume="300 mL" />
    <Transfer
      from_vessel="rotavap"
      to_vessel="separator"
      volume="all" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="separator"
      product_bottom="False"
      solvent="aqueous HCl"
      solvent_volume="300 mL" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_bottom="False"
      solvent="brine"
      through="Na2SO4"
      solvent_volume="100 mL"
      waste_phase_to_vessel="separator" />
    <Evaporate
      rotavap_name="rotavap"
      temp="50.0"
      pressure="153.0"
      time="30 mins"
      mode="auto" />
  </Procedure>

</Synthesis>
