<?xdl version="0.2.0" ?>

<Synthesis>
  <Hardware>
    <Component
      id="cartridge_magnesium sulfate"
      type="cartridge"
      chemical="magnesium sulfate" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      id="25 % aqueous sodium thiosulfate" />
    <Reagent
      id="DMP" />
    <Reagent
      id="ether" />
    <Reagent
      id="menthol (31.25 g in 500 mL DCM) DCM solution" />
    <Reagent
      id="saturated aqueous sodium bicarbonate solution" />
  </Reagents>

  <Procedure>
    <Add
      reagent="DMP"
      vessel="reactor"
      mass="51 g"
      stir="False" />
    <Add
      reagent="menthol (31.25 g in 500 mL DCM) DCM solution"
      vessel="reactor"
      volume="500 mL"
      stir="False" />
    <Stir
      vessel="reactor"
      time="30 mins" />
    <Add
      reagent="25 % aqueous sodium thiosulfate"
      vessel="reactor"
      volume="234 mL"
      stir="True" />
    <Add
      reagent="saturated aqueous sodium bicarbonate solution"
      vessel="reactor"
      volume="234 mL"
      stir="True" />
    <Stir
      vessel="reactor"
      time="30 mins"
      stir_speed="600 RPM" />
    <Separate
      purpose="extract"
      from_vessel="reactor"
      separation_vessel="separator"
      to_vessel="separator"
      product_bottom="False"
      solvent="ether"
      to_port="top"
      solvent_volume="700 mL"
      n_separations="1" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_bottom="False"
      solvent="saturated aqueous sodium bicarbonate solution"
      through="magnesium sulfate"
      to_port="evaporate"
      solvent_volume="468 mL"
      n_separations="2" />
    <Evaporate
      rotavap_name="rotavap"
      temp="50°C"
      pressure="768.5 mbar"
      time="30 mins"
      mode="auto" />
  </Procedure>

</Synthesis>
