<?xdl version="0.4.4" ?>

<Synthesis>
  <Hardware>
    <Component
      id="buffer_flask1"
      type="flask" />
    <Component
      id="cartridge_calcium chloride"
      type="cartridge"
      chemical="calcium chloride" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      id="a mixture of 235 g ( 2.5 moles ) of phenol and 100 g ( 2.5 moles ) of sodium hydroxide in 1 l of water" />
    <Reagent
      id="benzene" />
    <Reagent
      id="dimethyl sulfate" />
    <Reagent
      id="water" />
  </Reagents>

  <Procedure>
    <Add
      reagent="a mixture of 235 g ( 2.5 moles ) of phenol and 100 g ( 2.5 moles ) of sodium hydroxide in 1 l of water"
      vessel="reactor"
      volume="1000 mL" />
    <HeatChillToTemp
      vessel="reactor"
      temp="7.0"
      stir="True" />
    <Add
      reagent="dimethyl sulfate"
      vessel="reactor"
      volume="235 mL"
      time="60 mins"
      stir="True" />
    <HeatChill
      vessel="reactor"
      temp="100.0"
      time="30 mins"
      stir="True" />
    <Add
      reagent="a mixture of 235 g ( 2.5 moles ) of phenol and 100 g ( 2.5 moles ) of sodium hydroxide in 1 l of water"
      vessel="reactor"
      volume="1000 mL"
      time="15 mins"
      stir="True" />
    <HeatChill
      vessel="reactor"
      temp="150.0"
      time="15 hrs"
      stir="True" />
    <HeatChillToTemp
      vessel="reactor"
      temp="25.0"
      stir="True" />
    <Separate
      purpose="extract"
      from_vessel="reactor"
      separation_vessel="separator"
      to_vessel="buffer_flask1"
      product_bottom="False"
      solvent=""
      waste_phase_to_vessel="separator" />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="separator"
      product_bottom="False"
      solvent="benzene"
      solvent_volume="200 mL" />
    <Transfer
      from_vessel="buffer_flask1"
      to_vessel="separator"
      volume="all" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="reactor"
      product_bottom="False"
      solvent="water"
      through="calcium chloride"
      solvent_volume="25 mL" />
    <Distill />
  </Procedure>

</Synthesis>
