<?xdl version="0.4.4" ?>

<Synthesis>
  <Hardware>
    <Component
      id="cartridge_anhydrous magnesium sulfate(MgSO4)"
      type="cartridge"
      chemical="anhydrous magnesium sulfate(MgSO4)" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      id="6 M hydrochloric acid" />
    <Reagent
      id="benzyltriethylammonium chloride(TEBA)" />
    <Reagent
      id="chloroform" />
    <Reagent
      id="dichloromethane" />
    <Reagent
      id="ethyl vinyl ether" />
    <Reagent
      id="sodium hydroxide(NaOH) (12.0 g , 0.30 mol in 12 mL of H2O) water solution" />
    <Reagent
      id="water" />
  </Reagents>

  <Procedure>
    <Add
      reagent="ethyl vinyl ether"
      vessel="reactor"
      volume="9.55 mL" />
    <Add
      reagent="chloroform"
      vessel="reactor"
      volume="31.9 mL"
      stir="True" />
    <Add
      reagent="benzyltriethylammonium chloride(TEBA)"
      vessel="reactor"
      mass="0.1 g"
      stir="True" />
    <HeatChillToTemp
      vessel="reactor"
      temp="0.0"
      stir="True" />
    <Stir
      vessel="reactor"
      time="10 mins" />
    <Add
      reagent="sodium hydroxide(NaOH) (12.0 g , 0.30 mol in 12 mL of H2O) water solution"
      vessel="reactor"
      volume="12 mL"
      viscous="True"
      time="10 mins"
      stir="True"
      stir_speed="600.0" />
    <Stir
      vessel="reactor"
      time="2 hrs"
      stir_speed="600.0" />
    <HeatChill
      vessel="reactor"
      temp="25.0"
      time="22 hrs"
      stir="True"
      stir_speed="600.0" />
    <HeatChillToTemp
      vessel="reactor"
      temp="0.0"
      stir="True" />
    <Add
      reagent="6 M hydrochloric acid"
      vessel="reactor"
      volume="30 mL"
      time="10 mins"
      stir="True" />
    <Transfer
      from_vessel="reactor"
      to_vessel="separator"
      volume="all" />
    <Repeat
      repeats="2">
      <Add
        reagent="water"
        vessel="reactor"
        volume="20 mL"
        stir="True" />
      <Transfer
        from_vessel="reactor"
        to_vessel="separator"
        volume="all" />
    </Repeat>
    <Add
      reagent="dichloromethane"
      vessel="reactor"
      volume="30 mL"
      stir="True" />
    <Transfer
      from_vessel="reactor"
      to_vessel="separator"
      volume="all" />
    <Add
      reagent="water"
      vessel="separator"
      volume="60 mL"
      stir="True" />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_bottom="True"
      solvent=""
      through="anhydrous magnesium sulfate(MgSO4)"
      waste_phase_to_vessel="separator" />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_bottom="True"
      solvent="dichloromethane"
      through="anhydrous magnesium sulfate(MgSO4)"
      solvent_volume="60 mL"
      n_separations="3" />
    <Evaporate
      rotavap_name="rotavap"
      pressure="93.3254"
      time="30 mins"
      mode="auto" />
    <Add
      reagent="dichloromethane"
      vessel="rotavap"
      volume="2 mL" />
    <Distill />
  </Procedure>

</Synthesis>
