<?xdl version="0.4.4" ?>

<Synthesis>
  <Hardware>
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
  </Hardware>

  <Reagents>
    <Reagent
      id="pivalic acid" />
    <Reagent
      id="toluene" />
    <Reagent
      id="zinc oxide" />
  </Reagents>

  <Procedure>
    <Add
      reagent="toluene"
      vessel="reactor"
      volume="250 mL" />
    <Add
      reagent="pivalic acid"
      vessel="reactor"
      volume="12.5 mL"
      stir="True" />
    <Add
      reagent="zinc oxide"
      vessel="reactor"
      mass="4.07 g"
      stir="True" />
    <HeatChill
      vessel="reactor"
      temp="110.6"
      time="16 hrs"
      stir="True" />
    <HeatChillToTemp
      vessel="reactor"
      temp="25.0"
      stir="True" />
    <Transfer
      from_vessel="reactor"
      to_vessel="rotavap"
      volume="all" />
    <Evaporate
      rotavap_name="rotavap"
      temp="50.0"
      pressure="48.0"
      time="30 mins"
      mode="auto" />
    <Evaporate
      rotavap_name="rotavap"
      pressure="0.13332200000000002"
      time="30 mins"
      mode="auto" />
    <Transfer
      from_vessel="rotavap"
      to_vessel="reactor"
      volume="all" />
    <HeatChillToTemp
      vessel="reactor"
      temp="100.0"
      stir="True" />
    <Dry
      vessel="reactor"
      time="6 hrs" />
  </Procedure>

</Synthesis>
