<Synthesis>

  <Hardware>
    <Component
      id="reactor"
      type="reactor"
    />
    <Component
      id="filter"
      type="filter"
    />
  </Hardware>

  <Reagents>
    <Reagent
      name="4-phenylbutyric acid"
      solid="true"
    />
    <Reagent
      name="benzylamine"
    />
    <Reagent
      name="boric acid"
      solid="true"
    />
    <Reagent
      name="distilled water"
    />
    <Reagent
      name="hexanes"
    />
    <Reagent
      name="toluene"
    />
  </Reagents>

  <Procedure>
    <AddSolid
      vessel="reactor"
      reagent="4-phenylbutyric acid"
      mass="4.92 g"
    />
    <AddSolid
      vessel="reactor"
      reagent="boric acid"
      mass="20 mg"
    />
    <Add
      vessel="reactor"
      reagent="toluene"
      volume="70 mL"
    />
    <Add
      vessel="reactor"
      reagent="benzylamine"
      volume="3.4 mL"
      stir="True"
    />
    <HeatChill
      vessel="reactor"
      temp="140°C"
      time="16 hrs"
      stir="true"
    />
    <HeatChillToTemp
      vessel="reactor"
      temp="25°C"
      active="False"
      continue_heatchill="False"
      stir="true"
    />
    <Add
      vessel="filter"
      reagent="hexanes"
      volume="500 mL"
      stir="True"
    />
    <Transfer
      from_vessel="reactor"
      to_vessel="filter"
      volume="all"
    />
    <Stir
      vessel="filter"
      time="30 mins"
    />
    <Filter
      vessel="filter"
    />
    <WashSolid
      vessel="filter"
      solvent="hexanes"
      volume="60 mL"
      repeats="2"
    />
    <WashSolid
      vessel="filter"
      solvent="distilled water"
      volume="60 mL"
      repeats="2"
    />
    <Dry
      vessel="filter"
      time="12 hrs"
    />
  </Procedure>

</Synthesis>
