<Synthesis>

  <Hardware>
    <Component
      id="cartridge_MgSO4"
      type="cartridge"
      chemical="anhydrous magnesium sulfate(MgSO4)"
    />
    <Component
      id="reactor"
      type="reactor"
    />
    <Component
      id="rotavap"
      type="rotavap"
    />
    <Component
      id="separator"
      type="separator"
    />
  </Hardware>

  <Reagents>
    <Reagent
      name="6 M hydrochloric acid"
    />
    <Reagent
      name="benzyltriethylammonium chloride(TEBA)"
      solid="true"
    />
    <Reagent
      name="chloroform"
    />
    <Reagent
      name="dichloromethane"
    />
    <Reagent
      name="ethyl vinyl ether"
    />
    <Reagent
      name="sodium hydroxide(NaOH) (12.0 g , 0.30 mol in 12 mL of H2O) water solution"
    />
    <Reagent
      name="water"
    />
  </Reagents>

  <Procedure>
    <Add
      vessel="reactor"
      reagent="ethyl vinyl ether"
      volume="9.55 mL"
    />
    <Add
      vessel="reactor"
      reagent="chloroform"
      volume="31.9 mL"
      stir="True"
    />
    <AddSolid
      vessel="reactor"
      reagent="benzyltriethylammonium chloride(TEBA)"
      mass="0.1 g"
      stir="True"
    />
    <HeatChillToTemp
      vessel="reactor"
      temp="0°C"
      stir="true"
    />
    <Stir
      vessel="reactor"
      time="10 mins"
    />
    <Add
      vessel="reactor"
      reagent="sodium hydroxide(NaOH) (12.0 g , 0.30 mol in 12 mL of H2O) water solution"
      volume="15.8 mL"
      time="10 mins"
      stir="True"
      stir_speed="600 RPM"
    />
    <Stir
      vessel="reactor"
      time="2 hrs"
      stir_speed="600 RPM"
    />
    <HeatChill
      vessel="reactor"
      temp="25°C"
      time="22 hrs"
      stir="true"
      stir_speed="600 RPM"
    />
    <HeatChillToTemp
      vessel="reactor"
      temp="0°C"
      stir="true"
    />
    <Add
      vessel="reactor"
      reagent="6 M hydrochloric acid"
      volume="30 mL"
      time="10 mins"
      stir="True"
    />
    <Transfer
      from_vessel="reactor"
      to_vessel="separator"
      volume="all"
    />
    <Repeat
      repeats="2"
    >
      <Add
        vessel="reactor"
        reagent="water"
        volume="20 mL"
        stir="True"
      />
      <Transfer
        from_vessel="reactor"
        to_vessel="separator"
        volume="all"
      />
    </Repeat>
    <Add
      vessel="reactor"
      reagent="dichloromethane"
      volume="30 mL"
      stir="True"
    />
    <Transfer
      from_vessel="reactor"
      to_vessel="separator"
      volume="all"
    />
    <Add
      vessel="separator"
      reagent="water"
      volume="60 mL"
      stir="True"
    />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_phase="bottom"
      through="anhydrous magnesium sulfate(MgSO4)"
      to_port="evaporate"
      waste_phase_to_vessel="separator"
    />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_phase="bottom"
      solvent="dichloromethane"
      through="anhydrous magnesium sulfate(MgSO4)"
      to_port="evaporate"
      solvent_volume="60 mL"
      repeats="3"
    />
    <Evaporate
      vessel="rotavap"
      pressure="93.33 mbar"
      time="30 mins"
      mode="auto"
    />
    <Add
      vessel="rotavap"
      reagent="dichloromethane"
      volume="2 mL"
    />
  </Procedure>

</Synthesis>
