<Synthesis>

  <Hardware>
    <Component
      id="cartridge_anhydrous MgSO4"
      type="cartridge"
      chemical="anhydrous MgSO4"
    />
    <Component
      id="reactor"
      type="reactor"
    />
    <Component
      id="rotavap"
      type="rotavap"
    />
    <Component
      id="separator"
      type="separator"
    />
  </Hardware>

  <Reagents>
    <Reagent
      name="2-thiophenecarboxaldehyde"
      solid="true"
    />
    <Reagent
      name="K2CO3"
      solid="true"
    />
    <Reagent
      name="MTBE"
    />
    <Reagent
      name="methanol"
    />
    <Reagent
      name="saturated NaCl solution"
    />
    <Reagent
      name="tosylmethylisocyanide"
      solid="true"
    />
    <Reagent
      name="water"
    />
  </Reagents>

  <Procedure>
    <AddSolid
      vessel="reactor"
      reagent="2-thiophenecarboxaldehyde"
      mass="11.21 g"
    />
    <AddSolid
      vessel="reactor"
      reagent="K2CO3"
      mass="24.19 g"
    />
    <AddSolid
      vessel="reactor"
      reagent="tosylmethylisocyanide"
      mass="21.12 g"
    />
    <Add
      vessel="reactor"
      reagent="methanol"
      volume="448 mL"
      stir="True"
    />
    <HeatChill
      vessel="reactor"
      temp="70°C"
      time="4 hrs"
      stir="true"
    />
    <HeatChillToTemp
      vessel="reactor"
      temp="25°C"
      active="False"
      stir="true"
    />
    <Add
      vessel="reactor"
      reagent="water"
      volume="224 mL"
      stir="True"
    />
    <Stir
      vessel="reactor"
      time="10 mins"
    />
    <Transfer
      from_vessel="reactor"
      to_vessel="rotavap"
      volume="all"
      to_port="evaporate"
    />
    <Evaporate
      vessel="rotavap"
      temp="45°C"
      pressure="84 mbar"
      time="30 mins"
      mode="auto"
    />
    <Separate
      purpose="extract"
      from_vessel="rotavap"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="top"
      solvent="MTBE"
      from_port="evaporate"
      to_port="top"
      solvent_volume="120 mL"
      repeats="3"
    />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="top"
      solvent="water"
      to_port="top"
      solvent_volume="50 mL"
    />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_phase="top"
      solvent="saturated NaCl solution"
      through="anhydrous MgSO4"
      to_port="evaporate"
      solvent_volume="50 mL"
    />
    <Evaporate
      vessel="rotavap"
      temp="35°C"
      pressure="66.66 mbar"
      time="30 mins"
      mode="auto"
    />
    <Distill
      vessel="reactor"
      temp="100°C"
      vapour_temp="78°C"
    />
  </Procedure>

</Synthesis>
