<Synthesis>

  <Hardware>
    <Component
      id="cartridge_sodium sulfate"
      type="cartridge"
      chemical="sodium sulfate"
    />
    <Component
      id="filter"
      type="filter"
    />
    <Component
      id="reactor"
      type="reactor"
    />
    <Component
      id="rotavap"
      type="rotavap"
    />
    <Component
      id="separator"
      type="separator"
    />
    <Component
      id="phase_A"
      type="flask"
    />
    <Component
      id="phase_B"
      type="flask"
    />
  </Hardware>

  <Reagents>
    <Reagent
      name="2-aminophenethyl alcohol DME solution"
    />
    <Reagent
      name="MTBE"
    />
    <Reagent
      name="SOCl2"
    />
    <Reagent
      name="anhydrous DME"
    />
    <Reagent
      name="brine"
    />
    <Reagent
      name="ethyl acetate"
    />
    <Reagent
      name="sodium hydroxide"
    />
    <Reagent
      name="water"
    />
    <Reagent
      name="methanol"
    />
    <Reagent
      name="oxalic acid dihydrate"
      solid="true"
    />
    <Reagent
      name="10 % methanol ethyl acetate solution"
    />
  </Reagents>

  <Procedure>
    <HeatChillToTemp
      vessel="reactor"
      temp="25°C"
      stir="true"
    />
    <Add
      vessel="reactor"
      reagent="anhydrous DME"
      volume="80 mL"
    />
    <Add
      vessel="reactor"
      reagent="SOCl2"
      volume="6.2 mL"
      stir="True"
    />
    <Add
      vessel="reactor"
      reagent="2-aminophenethyl alcohol DME solution"
      volume="20 mL"
      time="1.25 hrs"
      stir="True"
    />
    <Stir
      vessel="reactor"
      time="6.5 hrs"
    />
    <HeatChillToTemp
      vessel="reactor"
      temp="32°C"
      stir="true"
    />
    <Add
      vessel="reactor"
      reagent="sodium hydroxide"
      volume="128 mL"
      time="30 mins"
      stir="True"
    />
    <Add
      vessel="reactor"
      reagent="water"
      volume="16 mL"
      time="30 mins"
      stir="True"
    />
    <HeatChillToTemp
      vessel="reactor"
      temp="60°C"
      stir="true"
    />
    <Stir
      vessel="reactor"
      time="10 hrs"
    />
    <HeatChillToTemp
      vessel="reactor"
      temp="25°C"
      stir="true"
    />
    <Transfer
      from_vessel="reactor"
      to_vessel="separator"
      volume="all"
      to_port="top"
    />
    <Add
      vessel="separator"
      reagent="MTBE"
      volume="100 mL"
      stir="True"
    />
    <Add
      vessel="separator"
      reagent="water"
      volume="56 mL"
      stir="True"
    />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="phase_A"
      product_phase="top"
      waste_phase_to_vessel="phase_B"
    />
    <Transfer
      from_vessel="phase_B"
      to_vessel="separator"
      volume="all"
      to_port="top"
    />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="top"
      solvent="MTBE"
      to_port="top"
      solvent_volume="56 mL"
    />
    <Transfer
      from_vessel="phase_A"
      to_vessel="separator"
      volume="all"
      to_port="top"
    />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_phase="top"
      solvent="brine"
      through="sodium sulfate"
      to_port="evaporate"
      solvent_volume="43 mL"
    />
    <Evaporate
      vessel="rotavap"
      temp="35°C"
      pressure="79.9932 mbar"
      time="30 mins"
      mode="auto"
    />
    <Dissolve
      vessel="rotavap"
      solvent="ethyl acetate"
      volume="90 mL"
    />
    <AddSolid
      vessel="filter"
      reagent="oxalic acid dihydrate"
      mass="9.3 g"
      stir="True"
    />
    <Add
      vessel="filter"
      reagent="methanol"
      volume="14 mL"
      stir="True"
    />
    <HeatChillToTemp
      vessel="filter"
      temp="25°C"
      stir="true"
    />
    <Transfer
      from_vessel="rotavap"
      to_vessel="filter"
      volume="30 mL"
      from_port="evaporate"
      to_port="top"
      dispense_speed="3"
    />
    <Stir
      vessel="filter"
      time="30 mins"
    />
    <Transfer
      from_vessel="rotavap"
      to_vessel="filter"
      volume="100 mL"
      from_port="evaporate"
      to_port="top"
      dispense_speed="0.83"
    />
    <HeatChill
      vessel="filter"
      temp="25°C"
      time="15 hrs"
      stir="true"
    />
    <Filter
      vessel="filter"
    />
    <WashSolid
      vessel="filter"
      solvent="10 % methanol ethyl acetate solution"
      volume="15 mL"
    />
    <Dry
      vessel="filter"
    />
  </Procedure>

</Synthesis>
