<XDL>
<Blueprint id="Cyclic_Mitsunobu_Recursive_Split">
    <Hardware>
        <Component id="reactor" type="reactor"/>
        <Component id="azodicarboxylate_vial" type="reactor"/>
    </Hardware>

    <!-- BLUEPRINT SPECIFIC PARAMETER -->
    <Parameters>
        <Parameter id="reaction_time" type="time"/>
        <Parameter id="reaction_temp" type="temp"/>
        <Parameter id="reaction_volume" type="volume" value="15 mL"/>
        <Parameter id="precipitate_volume" type="volume" value="20 mL"/>
    </Parameters>

    <Reagents>
        <Reagent id="reagent"/>
        <Reagent id="phosphine"/>
        <Reagent id="azodicarboxylate"/>
        <Reagent id="reaction_solvent"/>
        <Reagent id="precipitate_solvent"/>
    </Reagents>

    <Procedure>
        <Dissolve_Reagents_Recursive_Split
            reagent="reagent"
            phosphine="phosphine"
            azodicarboxylate_vial="azodicarboxylate_vial"
            reactor="reactor"
            reaction_solvent="reaction_solvent"
            equiv_reference="reagent"
            equiv_amount="3.5 mmol"
        />

        <HeatChillToTemp vessel="reactor" temp="0 °C" stir="True" />

        <Transfer
            from_vessel="azodicarboxylate_vial"
            to_vessel="reactor"
            volume="all"
            time="10 min"
            rinsing_volume="1 mL"
            rinsing_repeats="3"
            rinse_withdrawal_excess="0.0" />

        <ResetHandling
            solvent="reaction_solvent" />
        <ResetHandling
            solvent="precipitate_solvent" />

        <!-- USE OF BLUEPRINT SPECIFIC PARAMETER -->
        <HeatChill
            vessel="reactor"
            param.temp="reaction_temp"
            param.time="reaction_time"
            stir="True" />
        <Evaporate
            vessel="reactor"
            temp="45 °C"
            time="1 h"
            pressure="50 mbar"
            mode="auto" />

        <Dissolve
            vessel="reactor"
            solvent="precipitate_solvent"
            param.volume="precipitate_volume"
            time="5 min" />

    </Procedure>
</Blueprint>

<Blueprint id="Dissolve_Reagents_Recursive_Split">
    <Hardware>
        <Component id="reactor" type="reactor"/>
        <Component id="azodicarboxylate_vial" type="reactor"/>
    </Hardware>

    <Reagents>
        <Reagent id="reagent"/>
        <Reagent id="phosphine"/>
        <Reagent id="reaction_solvent"/>
    </Reagents>

    <Procedure>
        <Add reagent="reagent" vessel="reactor" amount="1 eq"/>
        <Add reagent="phosphine" vessel="reactor" amount="1.197 eq"/>

        <Dissolve
            vessel="reactor"
            solvent="reaction_solvent"
            volume="16.2 mL"
            time="60 s"/>

        <Dissolve
            vessel="azodicarboxylate_vial"
            solvent="THF"
            volume="2 mL"
            time="60 s" />
    </Procedure>
</Blueprint>
</XDL>
